# Unload all devices
Property,Core,Initialize,0
# Load devices
Device,COM4,SerialManager,COM4
Device,COM5,SerialManager,COM5
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,Scanner:AB:33,ASITiger,Scanner:AB:33
Device,PiezoStage:P:34,ASITiger,PiezoStage:P:34
Device,ZStage:F:35,ASITiger,ZStage:F:35
Device,PLogic:E:36,ASITiger,PLogic:E:36
Device,CRISPAFocus:Z:32,ASITiger,CRISPAFocus:Z:32
Device,CRISPAFocus:P:34,ASITiger,CRISPAFocus:P:34
Device,Combiner,OxxiusCombiner,Combiner
Device,Shutter 1,OxxiusCombiner,Shutter 1
Device,Shutter 2,OxxiusCombiner,Shutter 2
Device,Camera-1,PVCAM,Camera-1
Device,Camera-2,PVCAM,Camera-2
Device,Multi Camera,Utilities,Multi Camera
# Pre-initialization properties
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,115200
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,TigerCommHub,Port,COM4
Property,PLogic:E:36,PLogicMode,diSPIM Shutter
Property,Combiner,Port,COM5
# Hub references
Parent,ZStage:Z:32,TigerCommHub
Parent,PiezoStage:P:34,TigerCommHub
Parent,ZStage:F:35,TigerCommHub
Parent,Shutter 1,Combiner
Parent,Shutter 2,Combiner
Property,Core,Initialize,1
# Delays
# Stage focus directions
FocusDirection,ZStage:Z:32,0
FocusDirection,PiezoStage:P:34,0
FocusDirection,ZStage:F:35,0
# Labels

# Group configurations
ConfigGroup,Cameras,Sensitivity,Camera-1,Port,Sensitivity
ConfigGroup,Cameras,Sensitivity,Camera-2,Port,Sensitivity
ConfigGroup,Cameras,Speed,Camera-1,Port,Speed
ConfigGroup,Cameras,Speed,Camera-2,Port,Speed
ConfigGroup,Joystick Wheels,Galvo_P,ZStage:Z:32,JoystickInput,0 - none
ConfigGroup,Joystick Wheels,Galvo_P,Scanner:AB:33,JoystickInputX,23 - left wheel
ConfigGroup,Joystick Wheels,Galvo_P,PiezoStage:P:34,JoystickInput,22 - right wheel
ConfigGroup,Joystick Wheels,Galvo_P,ZStage:F:35,JoystickInput,0 - none
ConfigGroup,Joystick Wheels,Z_P,ZStage:Z:32,JoystickInput,23 - left wheel
ConfigGroup,Joystick Wheels,Z_P,Scanner:AB:33,JoystickInputX,0 - none
ConfigGroup,Joystick Wheels,Z_P,PiezoStage:P:34,JoystickInput,22 - right wheel
ConfigGroup,Joystick Wheels,Z_P,ZStage:F:35,JoystickInput,0 - none
ConfigGroup,Lasers,405nm,PLogic:E:36,OutputChannel,output 7 only
ConfigGroup,Lasers,488nm,PLogic:E:36,OutputChannel,output 6 only
ConfigGroup,Lasers,561nm,PLogic:E:36,OutputChannel,output 8 only
ConfigGroup,Lasers,638nm,PLogic:E:36,OutputChannel,output 5 only
ConfigGroup,Lasers,AllLasers,PLogic:E:36,OutputChannel,outputs 5-8
ConfigGroup,System,Startup,Multi Camera,Physical Camera 1,Camera-1
ConfigGroup,System,Startup,Multi Camera,Physical Camera 2,Camera-2

# Pixel Size configurations

# Roles
Property,Core,Camera,Multi Camera
Property,Core,Shutter,PLogic:E:36
Property,Core,Focus,PiezoStage:P:34
Property,Core,ChannelGroup,Lasers
